PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Harsheel Chawla - Staircase exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      units = pix
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    EnvGratingComponent env_grating
      beat = False
      carrier = sin
      contrast = 0.5
      envelope = sin
      envori = 0.0
      envphase = 0.0
      envsf = 1.0
      mask = circle 
      moddepth = 1.0
      pos [set every repeat] = $location
      power = 1.0
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random()>0.5: # 50:50 probability
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
      End Experiment:
        thisExp.addData('key_resp.corr', key_resp.corr)

        if random()>0.5: # 50:50 probability
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
Flow
  Routine trial
